CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:56
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "BV480")
    Name to assign these images:BV480
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "COX2")
    Name to assign these images:COX2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PanCK")
    Name to assign these images:PanCK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PTGER4")
    Name to assign these images:PTGER4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PIK3CA")
    Name to assign these images:PIK3CA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TotalTissueArea")
    Name to assign these images:TotalTissueArea
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:BV480
    Name the output object:BV480Objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:TotalTissueArea
    Name the output object:TotalTissueAreaObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:7|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
    Select the input image:COX2
    Name the output object:COX2Objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:8|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
    Select the input image:DAPI
    Name the output object:DAPIObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:9|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
    Select the input image:PTGER4
    Name the output object:PTGER4Objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:10|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
    Select the input image:PIK3CA
    Name the output object:PIK3CAObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:11|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
    Select the input image:PanCK
    Name the output object:PanCKObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:BV480Objects
    Name the output objects:BV480expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskObjects:[module_num:13|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
    Select objects to be masked:PanCKObjects
    Name the masked objects:PanCK_Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:14|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
    Select objects to be masked:DAPIObjects
    Name the masked objects:DAPI_Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:15|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
    Select objects to be masked:COX2Objects
    Name the masked objects:COX2_Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:16|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
    Select objects to be masked:PTGER4Objects
    Name the masked objects:PTGER4_Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:17|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
    Select objects to be masked:PIK3CAObjects
    Name the masked objects:PIK3CA__Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:18|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
    Parent objects:DAPI_Masked
    Child objects:COX2_Masked
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:COX2_relate
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
RelateObjects:[module_num:19|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
    Parent objects:DAPI_Masked
    Child objects:PTGER4_Masked
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PTGER4_relate
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
RelateObjects:[module_num:20|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
    Parent objects:DAPI_Masked
    Child objects:PIK3CA__Masked
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PIK3CA_relate
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
MaskObjects:[module_num:21|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
    Select objects to be masked:COX2_relate
    Name the masked objects:COX2_PTGER4
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PTGER4_relate
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:22|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
    Select objects to be masked:PTGER4_relate
    Name the masked objects:PTGER4_PIK3CA
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PIK3CA_relate
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:23|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
    Select the input objects:PanCK_Masked
    Name the objects to be identified:IdentifySecondPanCK
    Select the method to identify the secondary objects:Propagation
    Select the input image:PanCK
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:24|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
    Select objects to be masked:COX2_PTGER4
    Name the masked objects:Epi_COX2PTGER4
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:25|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
    Select objects to be masked:COX2_PTGER4
    Name the masked objects:Stroma_COX2PTGER4
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:26|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
    Select objects to be masked:PTGER4_PIK3CA
    Name the masked objects:Epi_PIK3CAPTGER4
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:27|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
    Select objects to be masked:PTGER4_PIK3CA
    Name the masked objects:Stroma_PIK3CAPTGER4
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:28|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
    Select objects to be masked:TotalTissueAreaObjects
    Name the masked objects:StromaArea
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:29|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
    Select the input objects:Epi_COX2PTGER4
    Name the output image:COX2PTGER4_EpiImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:30|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
    Select the input objects:Stroma_COX2PTGER4
    Name the output image:COX2PTGER4_StromaImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:31|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
    Select the input objects:Epi_PIK3CAPTGER4
    Name the output image:PIK3CAPTGER4_EpiImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:32|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
    Select the input objects:Stroma_PIK3CAPTGER4
    Name the output image:PIK3CAPTGER4_StromaImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:33|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
    Select the input objects:IdentifySecondPanCK
    Name the output image:PanCK_Total
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:34|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
    Select the input objects:StromaArea
    Name the output image:StromaAreaImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:35|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
    Select the input objects:COX2_PTGER4
    Name the output image:COX2PTGER4
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:36|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
    Select the input objects:PTGER4_PIK3CA
    Name the output image:PTGER4PIK3CA
    Select the color format:Binary (black & white)
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
MeasureImageAreaOccupied:[module_num:37|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:COX2PTGER4, COX2PTGER4_EpiImage, COX2PTGER4_StromaImage, PIK3CAPTGER4_EpiImage, PIK3CAPTGER4_StromaImage, PTGER4PIK3CA, PanCK_Total, StromaAreaImage
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
CalculateMath:[module_num:38|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
    Name the output measurement:TotalTissueArea
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:AreaOccupied_AreaOccupied_PanCK_Total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:AreaOccupied_AreaOccupied_StromaAreaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:39|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
    Name the output measurement:COX2PTGER4_EpiPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_COX2PTGER4_EpiImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_PanCK_Total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:40|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
    Name the output measurement:COX2PTGER4_StromaPos
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_COX2PTGER4_StromaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_StromaAreaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:41|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
    Name the output measurement:COX2PTGER4_TotalPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_COX2PTGER4
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_TotalTissueArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:42|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
    Name the output measurement:PIK3CAPTGER4_EpiPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_PIK3CAPTGER4_EpiImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_PanCK_Total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:43|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
    Name the output measurement:PIK3CAPTGER4_StromaPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_PIK3CAPTGER4_StromaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_StromaAreaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:44|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
    Name the output measurement:PIK3CAPTGER4_TotalPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_PTGER4PIK3CA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_TotalTissueArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:45|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_COX2PTGER4,Image|AreaOccupied_AreaOccupied_COX2PTGER4_StromaImage,Image|AreaOccupied_AreaOccupied_COX2PTGER4_EpiImage,Image|AreaOccupied_AreaOccupied_PanCK_Total,Image|AreaOccupied_AreaOccupied_PIK3CAPTGER4_EpiImage,Image|AreaOccupied_AreaOccupied_PIK3CAPTGER4_StromaImage,Image|AreaOccupied_AreaOccupied_StromaAreaImage,Image|Math_PIK3CAPTGER4_EpiPercent,Image|Math_PIK3CAPTGER4_TotalPercent,Image|Math_PIK3CAPTGER4_StromaPercent,Image|Math_COX2PTGER4_TotalPercent,Image|Math_COX2PTGER4_EpiPercent,Image|Math_COX2PTGER4_StromaPos,Image|Math_TotalTissueArea,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Nikhil_3markersCoExpressionTwoFields.csv
    Use the object name for the file name?:No

ConvertObjectsToImage:[module_num:46|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enabled:False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
    Select the input objects:COX2_relate
    Name the output image:COX2_relatedimage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:47|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enabled:False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
    Select the input objects:PGE2EP4_relate
    Name the output image:PGE2EP4_relatedimage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:48|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enabled:False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
    Select the input objects:PIK3CA_relate
    Name the output image:PIK3CA_relatedimage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:49|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enabled:False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
    Select the input objects:DAPI_Masked
    Name the output image:DAPI_MaskImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:50|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enabled:False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
    Select the input objects:PanCK_Masked
    Name the output image:PanCK_MaskImage
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:51|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:COX2_relatedimage
    Select the image to be colored green:PanCK_MaskImage
    Select the image to be colored blue:DAPI_MaskImage
    Name the output image:COX2_Merged
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:52|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:PGE2EP4_relatedimage
    Select the image to be colored green:PanCK_MaskImage
    Select the image to be colored blue:DAPI_MaskImage
    Name the output image:PEG2EP4_Merged
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:53|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:PIK3CA_relatedimage
    Select the image to be colored green:PanCK_MaskImage
    Select the image to be colored blue:DAPI_MaskImage
    Name the output image:PIK3CA_Merged
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:54|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:COX2_Merged
    Select method for constructing file names:From image filename
    Select image name for file prefix:COX2
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\suy\\Desktop\\Output\\Step4_QuantitativeAnalysis
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:55|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:PEG2EP4_Merged
    Select method for constructing file names:From image filename
    Select image name for file prefix:PGE2EP4
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\suy\\Desktop\\Output\\Step4_QuantitativeAnalysis
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:56|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:PIK3CA_Merged
    Select method for constructing file names:From image filename
    Select image name for file prefix:PIK3CA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\suy\\Desktop\\Output\\Step4_QuantitativeAnalysis
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
